/*
 * Macro template to process multiple images in a folder
 */
// The path you store your raw images and segmented images
#@ File (label = "Input directory", style = "directory") input
#@ File (label = "Output directory", style = "directory") output
#@ String (label = "File suffix", value = ".tif") suffix

// See also Process_Folder.py for a version of this code
// in the Python scripting language.

processFolder(input);

// function to scan folders/subfolders/files to find files with correct suffix
function processFolder(input) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i]))
			processFolder(input + File.separator + list[i]);
		if(endsWith(list[i], suffix))
			processFile(input, output, list[i]);
	}
}

function processFile(input, output, file) {
	// Do the processing here by adding your own code.
	open(input + File.separator + file);
    //run("RGB Color");
run("Enhance Contrast", "saturated=0.35");
wait(300);
run("Advanced Weka Segmentation");
wait(300);
// The path you place your model and data
call("trainableSegmentation.Weka_Segmentation.loadClassifier", "C:\\Users\\TJ\\Desktop\\jiangjie\\classifier3.model");
wait(300);
call("trainableSegmentation.Weka_Segmentation.getResult");
wait(300);
run("8-bit");
setOption("BlackBackground", true);
run("Convert to Mask");
run("Remove Outliers...", "radius=1.5 threshold=50 which=Bright");
run("Close-");
	// Leave the print statements until things work, then remove them.
	print("Processing: " + input + File.separator + file);
	save(output + File.separator + file + "_result");
    close();
close();
}

